PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'handedness': '["right", "left"]', 'practice': '["no","yes"]', 'restart_from_run': '[None, 2,3]'}
  Full-screen window = True
  Monitor = kats_mac
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = RL_in-scanner
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine cue
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    ImageComponent left_box
      image = stimuli/box_transparent.png
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent right_box
      image = stimuli/box_transparent.png
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent cue_resp
      allowedKeys = button_list
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
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    CodeComponent good_side_code
      Code Type = Auto->JS
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      Begin Experiment:
        good_side = "right"
        #counter = 0
        num_rewarded = 0
        num_switch = 0
      Begin Routine:
        #if the participant has the right number of
        #correct guesses
        if num_rewarded == num_switch_list[num_switch]:
            if good_side == "right":
                good_side = "left"
            elif good_side == "left":
                good_side = "right"
            num_rewarded = 0
            num_switch = num_switch + 1 # we move one switch forward


        #if good_side has switched, make first correct choice
        #a gold coin
      End Routine:
        #if good_side has switched and they pick the good side
        #for the first time, make first correct choice
        #a gold coin

        if(num_rewarded == 0 and sequence[exp_correct] == 0 and ((cue_resp.keys == left_button and good_side == "left") or (cue_resp.keys == right_button and good_side == "right"))):
            sequence[exp_correct] = 1
            #double check this logic:
            next_1 = sequence.index(1, exp_correct + 1)
            sequence[next_1] = 0

        #print("trialNum " + str(trials.thisN))
        #print("rewards" + str(num_rewarded))
        #print("prob seq" + str(sequence[exp_correct]))
        #print((cue_resp.keys == '1' and good_side == "left") or (cue_resp.keys == '2' and good_side == "right"))


        #Check if these need to be reward or just right
        # I'm guessing rewarded
        if(cue_resp.keys == left_button and good_side == "left"):
            if(sequence[exp_correct] == 1):
                num_rewarded = num_rewarded + 1
                num_gold_coins = num_gold_coins + 1
            exp_correct = exp_correct + 1



        if(cue_resp.keys == right_button and good_side == "right"):
            if(sequence[exp_correct] == 1):
                num_rewarded = num_rewarded + 1
                num_gold_coins = num_gold_coins + 1
            exp_correct = exp_correct + 1


        thisExp.addData('good_side', good_side)
        thisExp.addData('probability_sequence_value', sequence[exp_correct - 1])
        thisExp.addData('magic_number', num_switch_list[num_switch])
        thisExp.addData('num_rewarded', num_rewarded)
        thisExp.addData('num_switch', num_switch)
        thisExp.addData('total_correct', exp_correct)
        thisExp.addData('num_gold_coins', num_gold_coins)
    KeyboardComponent all_keys
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = all keys
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    CodeComponent jitters_code
      Code Type = Auto->JS
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      Begin Routine:
        #Grab right ITI and ISI for this trial num
        #since trial number ranges from 0-150 on sheet
        trial_num = trials.thisN + 50*runs.thisN

        ISI = jitters.loc[(jitters['Run'] == runs.thisN + 1) & (jitters['Trial'] == trial_num + 1)]["ISI"].item() / 1000
        ITI = jitters.loc[(jitters['Run'] == runs.thisN + 1) & (jitters['Trial'] == trial_num + 1)]["ITI"].item() / 1000

        currentLoop.addData('cueOnTime', fmriClock.getTime())
      End Routine:
        currentLoop.addData('cueOffTime', fmriClock.getTime())
  Routine outcome
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    CodeComponent box_selection_code
      Code Type = Auto->JS
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      Begin Routine:
        currentLoop.addData('outcomeOnTime', fmriClock.getTime())
        #if no press is made
        right_image = 'stimuli/box_transparent.png'
        left_image = 'stimuli/box_transparent.png'
        #if left press
        if cue_resp.keys==left_button:
            #look back one since exp_correct has been incremented
            if sequence[exp_correct - 1] == 1 and good_side == "left":
                left_image = 'stimuli/box_coin_transparent.png'
            else:
                left_image = 'stimuli/box_empty_transparent.png'
        #if right press
        # load in images of either coin box or empty box conditionally
        elif cue_resp.keys==right_button: #same as above
            #look back one since exp_correct has been incremented
            if sequence[exp_correct -1 ] == 1 and good_side == "right":
                right_image = 'stimuli/box_coin_transparent.png'
            else:
                right_image = 'stimuli/box_empty_transparent.png'
        else:
            Choice="NA"
      End Routine:
        if cue_resp.keys==left_button:
            thisExp.addData('outcome_image', left_image)
        elif cue_resp.keys==right_button:
            thisExp.addData('outcome_image', right_image)
        else:
            thisExp.addData('outcome_image', "no selection made")

        currentLoop.addData('outcomeOffTime', fmriClock.getTime())
    ImageComponent outcome_left_box
      image [set every repeat] = $left_image
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent outcome_right_box
      image [set every repeat] = $right_image
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine fixation
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    TextComponent fixation_cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITI
      text = +
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    CodeComponent log_times_code
      Code Type = Auto->JS
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      Begin Routine:
        currentLoop.addData('fixOnTime', fmriClock.getTime())
      End Routine:
        currentLoop.addData('fixOffTime', fmriClock.getTime())
  Routine get_ready
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    TextComponent get_ready_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Get Ready! The experimenter will start the game momentarily.
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    KeyboardComponent advance_press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent init_runs
      Code Type = Auto->JS
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      Begin Routine:
        num_gold_coins = 0
        leftover_t = 0 #leftover time for fast RTs to run out at end of trial

        #pick coin side for the start of the run
        coin = random.randint(1, 2)
        if coin == 1:
            good_side = "left"
        else:
            good_side = "right"

        good_side = "right"
        #start at a new magic num for runs 2, 3
        if runs.thisN != 0 and num_rewarded != 0:
            num_switch = num_switch + 1


        num_rewarded = 0 #start fresh for each run
  Routine run_feedback
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    TextComponent coins_won_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $'Congratulations, you collected ' + str(num_gold_coins) + ' gold coins!!'
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    CodeComponent save_output
      Code Type = Auto->JS
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      Begin Experiment:
        thisExp.saveAsWideText(filename + '_backup.csv', delim='auto')
        thisExp.saveAsPickle(filename)
  Routine scanner_trigger
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    TextComponent scanner_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = waiting for scanner
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    KeyboardComponent trigger_value
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent trigger_code
      Code Type = Auto->JS
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      Begin Routine:
        waitForScannerClock = core.Clock()
        fmriClock = core.Clock()
      End Routine:
        fmriClock.reset()
  Routine summary_instructions
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    TextComponent summary_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        1. In the game, there will be two boxes, but only one is magical.

        2. Sometimes, the magical box switches sides!

        3. Sometimes, even the magical box does not have a coin.


        Try to collect all the coins!

        Press with your pointer finger to continue.
    CodeComponent define_switches_code
      Code Type = Auto->JS
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      Begin Experiment:
        #number correct for the switch occurs
        #we need two lists because of the restart at random
        numbers_1 = [7, 8, 9, 10, 11, 12, 13, 14, 15]
        numbers_2 = [7, 8, 9, 10, 11, 12, 13, 14, 15]
        #now shuffle the lists
        random.shuffle(numbers_1)
        random.shuffle(numbers_2)
        #concat to make the list
        num_switch_list = numbers_1 + numbers_2
    CodeComponent probability_sequence_code
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import csv
      Begin Experiment:
        sequence = []
        exp_correct = 0 #number of correct choices made in the experiment


        #TODO: pull this from experiment variables.
        number_of_trials = 150

        while len(sequence) < number_of_trials:
            #generate a probabilty list at 75p by alternating
            #ten trials at 80p and ten trials 70p.
            sequence_80 = [0] * 2 + [1] * 8
            random.shuffle(sequence_80)
            sequence_70 = [0] * 3 + [1] * 7
            random.shuffle(sequence_70)
            sequence = sequence + sequence_80 + sequence_70
            #TODO: output this sequence to a .csv that gets saved.


        #with open('test.csv', 'w', newline='') as myfile:
        #     wr = csv.writer(myfile)
        #     wr.writerow(sequence)
      Begin Routine:
        num_gold_coins = 0
    KeyboardComponent advance_to_runs
      allowedKeys = pointer
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent restart_mid_and_iti_code
      Code Type = Auto->JS
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      Before Experiment:
        import pandas as pd
      Begin Experiment:
        if expInfo["restart_from_run"]:
            #if 3, have 1 run, if 2, have 2 runs
            num_runs = 4 - expInfo["restart_from_run"]
        else:
            num_runs = 3


        #read in ISI and ITI jitters
        jitters = pd.read_csv('rl_reversal_jitters.csv')
  Routine leftover_time_break
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    TextComponent fixation_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = leftover_t
      text [set every repeat] = Take a short break.
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  Routine cue_response
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    CodeComponent cue_resp_feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize selection indicator
        selection_indicator = visual.Rect(
            win=win, name='selection_poly',
            width=(0.5, 0.5)[0], height=(0.5, 0.5)[1],
            ori=0.0, draggable=False, anchor='center',
            lineWidth=4.0,
            colorSpace='rgb', lineColor='white', fillColor=None,
            depth=-4.0, interpolate=True,
            autoDraw = False)

        #initialize too slow message
        too_slow_text = visual.TextStim(win=win, name='too_slow_text',
        text='too slow',
        font='Arial',
        pos=(0, .1), draggable=False, height=0.1, wrapWidth=None, ori=0.0,
        color='white', colorSpace='rgb', opacity=1.0,
        languageStyle='LTR',
        depth=-6.0,
        autoDraw = False)
      Begin Routine:
        #if response was made
        #get cue_resp.rt and figure out how much time is left over
        if(cue_resp.rt):
            remaining_t = 1.5 - cue_resp.rt
            leftover_t = leftover_t + remaining_t
            #select right or left
            if cue_resp.keys == left_button:
                print("trying to select")
                position = (-0.3, -0.15)
                selection_indicator.setPos(position)
                selection_indicator.setAutoDraw(True)
            elif cue_resp.keys == right_button:
                position = (0.3, -0.15)
                selection_indicator.setPos(position)
                selection_indicator.setAutoDraw(True)

        #show too slow message
        else:
            too_slow_text.setAutoDraw(True)

        currentLoop.addData('cueRespOnTime', fmriClock.getTime())
      End Routine:
        #turn off selection indicator
        selection_indicator.setAutoDraw(False)

        #turn off too slow
        too_slow_text.setAutoDraw(False)

        currentLoop.addData('cueRespOffTime', fmriClock.getTime())
    ImageComponent left_box_response
      image = stimuli/box_transparent.png
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ISI
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    ImageComponent right_box_response
      image = stimuli/box_transparent.png
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ISI
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  Routine end_exp
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  Routine prac_left
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    ImageComponent left_box_lp
      image = stimuli/box_transparent.png
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent right_box_lp
      image = stimuli/box_transparent.png
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent cue_resp_lp
      allowedKeys = prac_left_button
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent prac_left_text
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $left_prac_text
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  Routine prac_left_response
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    CodeComponent prac_left_feedback
      Code Type = Auto->JS
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      Begin Routine:
        #initialize selection indicator
        '''
        pr_selection_indicator = visual.Rect(
            win=win, name='left_select',
            width=(0.5, 0.5)[0], height=(0.5, 0.5)[1],
            ori=0.0, draggable=False, anchor='center',
            lineWidth=4.0,
            pos = (-0.3, -0.15),
            colorSpace='rgb', lineColor='white', fillColor=None,
            depth=-4.0, interpolate=True,
            autoDraw = True)
         '''
        position = (-0.3, -0.15)
        selection_indicator.setPos(position)
        selection_indicator.setAutoDraw(True)
      End Routine:
        #turn off selection indicator
        #pr_selection_indicator.setAutoDraw(False)
        selection_indicator.setAutoDraw(False)
    ImageComponent left_box_lr
      image = stimuli/box_transparent.png
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent right_box_lr
      image = stimuli/box_transparent.png
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine prac_right
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    ImageComponent left_box_rp
      image = stimuli/box_transparent.png
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent right_box_rp
      image = stimuli/box_transparent.png
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent cue_resp_rp
      allowedKeys = prac_right_button
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent prac_right_text
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $right_prac_text
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  Routine prac_right_response
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    CodeComponent prac_right_feedback
      Code Type = Auto->JS
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      Begin Routine:
        #initialize selection indicator
        '''
        pr_selection_indicator = visual.Rect(
            win=win, name='right_select_poly',
            width=(0.5, 0.5)[0], height=(0.5, 0.5)[1],
            ori=0.0, draggable=False, anchor='center',
            lineWidth=4.0,
            pos = (0.3, -0.15),
            colorSpace='rgb', lineColor='white', fillColor=None,
            depth=-4.0, interpolate=True,
            autoDraw = True)
         '''
        position = (0.3, -0.15)
        selection_indicator.setPos(position)
        selection_indicator.setAutoDraw(True)
      End Routine:
        #turn off selection indicator
        #pr_selection_indicator.setAutoDraw(False)
        selection_indicator.setAutoDraw(False)
    ImageComponent left_box_rr
      image = stimuli/box_transparent.png
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent right_box_rr
      image = stimuli/box_transparent.png
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine prac_dir
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    TextComponent welcome_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruc
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    KeyboardComponent advance_press_pd
      allowedKeys = pointer
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent button_box_and_practice_code
      Code Type = Auto->JS
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      Begin Experiment:
        #TODO change as needed by scanner site.
        #define left and right button for right handed people
        if expInfo["handedness"] == "right":
            left_button = '0' #vars must be in single quotes
            prac_left_button = left_button
            right_button = '1'
            prac_right_button = right_button
            instruc = "In this game, your job is to collect as many gold coins as possible. \n\n There will be two boxes on the screen, one on the left and one on the right. Press the button with your pointer finger to choose the box on the left, and press the button with your middle finger to choose the box on the right.\n\nOnce you choose, a frame will show up on the screen. If you choose too late, your choice will not count.\n\nAfter you make a choice, you will get feedback telling you if the box had a coin in it.\n\nPress with your pointer finger to continue."
            pointer = left_button
            left_prac_text = "Practice selecting the left box by pressing with your pointer finger."
            right_prac_text = "Practice selecting the right box by pressing with your middle finger."
        #define left and right button for right handed people
        else:
            left_button = '0'
            prac_left_button = left_button
            right_button = '1'
            prac_right_button = right_button
            instruc = "In this game, your job is to collect as many gold coins as possible. \n\n There will be two boxes on the screen, one on the left and one on the right. Press the button with your middle finger to choose the box on the left, and press the button with your pointer finger to choose the box on the right.\n\nOnce you choose, a frame will show up on the screen. If you choose too late, your choice will not count.\n\nAfter you make a choice, you will get feedback telling you if the box had a coin in it.\n\nPress with your pointer finger to continue."
            pointer = right_button
            left_prac_text = "Practice selecting the left box by pressing with your middle finger."
            right_prac_text = "Practice selecting the right box by pressing with your pointer finger."
        #make a list for allowed key presses in cue routine
        button_list = [left_button, right_button]

        #are we doing practice?
        practice_num = 0
        if expInfo["practice"] == "yes":
            practice_num = 1
Flow
  Routine prac_dir
  LoopInitiator practice_loop loopType="TrialHandler"
    loopType = random
    nReps = practice_num
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    Routine prac_left
    Routine prac_left_response
    Routine prac_right
    Routine prac_right_response
  LoopTerminator practice_loop
  Routine summary_instructions
  LoopInitiator runs loopType="TrialHandler"
    loopType = sequential
    nReps = num_runs
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    Routine get_ready
    Routine scanner_trigger
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 50
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      Routine cue
      Routine cue_response
      Routine outcome
      Routine fixation
    LoopTerminator trials
    Routine run_feedback
    Routine leftover_time_break
  LoopTerminator runs
  Routine end_exp
