PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'handedness': '["right", "left"]'}
  Full-screen window = True
  Monitor = kats_mac
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  color = $[-1,-1,-1]
  expName = RL_reversal
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine cue
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    ImageComponent left_box
      image = stimuli/box_transparent.png
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent right_box
      image = stimuli/box_transparent.png
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent cue_resp
      allowedKeys = left_press, right_press
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
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    CodeComponent good_side_code
      Code Type = Auto->JS
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      Begin Experiment:
        h_t = random.randint(1, 2)
        if h_t == 1:
            good_side = "right"
        else:
            good_side = "left"

        num_rewarded = 0
        num_switch = 0
      Begin Routine:
        #if the participant has the right number of
        #correct guesses
        if num_rewarded == num_switch_list[num_switch]:
            if good_side == "right":
                good_side = "left"
            elif good_side == "left":
                good_side = "right"
            num_rewarded = 0
            num_switch = num_switch + 1 # we move one switch forward


        #if good_side has switched, make first correct choice
        #a gold coin
      End Routine:
        #if good_side has switched and they pick the good side
        #for the first time, make first correct choice
        #a gold coin

        if(num_rewarded == 0 and sequence[exp_correct] == 0 and ((cue_resp.keys == left_button and good_side == "left") or (cue_resp.keys == right_button and good_side == "right"))):
            print("trying to switch")
            sequence[exp_correct] = 1
            #double check this logic:
            next_1 = sequence.index(1, exp_correct + 1)
            sequence[next_1] = 0

        #print("trialNum " + str(trials.thisN))
        #print("rewards" + str(num_rewarded))
        #print("prob seq" + str(sequence[exp_correct]))
        #print((cue_resp.keys == '1' and good_side == "left") or (cue_resp.keys == '2' and good_side == "right"))


        #Check if these need to be reward or just right
        # I'm guessing rewarded
        if(cue_resp.keys == left_button and good_side == "left"):
            if(sequence[exp_correct] == 1):
                num_rewarded = num_rewarded + 1
                num_gold_coins = num_gold_coins + 1
            exp_correct = exp_correct + 1



        if(cue_resp.keys == right_button and good_side == "right"):
            if(sequence[exp_correct] == 1):
                num_rewarded = num_rewarded + 1
                num_gold_coins = num_gold_coins + 1
            exp_correct = exp_correct + 1


        thisExp.addData('good_side', good_side)
        thisExp.addData('probability_sequence_value', sequence[exp_correct - 1])
        thisExp.addData('magic_number', num_switch_list[num_switch])
        thisExp.addData('num_rewarded', num_rewarded)
        thisExp.addData('num_switch', num_switch)
        thisExp.addData('total_correct', exp_correct)
        thisExp.addData('num_gold_coins', num_gold_coins)
    KeyboardComponent all_keys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = all keys
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    CodeComponent jitters_code
      Code Type = Auto->JS
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      Begin Routine:
        #Grab right ITI and ISI for this trial num
        ISI = jitters.loc[(jitters['Run'] == 1) & (jitters['Trial'] == trials.thisN + 1)]["ISI"].item() / 1000
        ITI = jitters.loc[(jitters['Run'] == 1) & (jitters['Trial'] == trials.thisN + 1)]["ITI"].item() / 1000
  Routine outcome
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    CodeComponent box_selection_code
      Code Type = Auto->JS
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      Begin Routine:
        #if no press is made
        right_image = 'stimuli/box_transparent.png'
        left_image = 'stimuli/box_transparent.png'
        #if left press
        if cue_resp.keys==left_button:
            #look back one since exp_correct has been incremented
            if sequence[exp_correct - 1] == 1 and good_side == "left":
                left_image = 'stimuli/box_coin_transparent.png'
            else:
                left_image = 'stimuli/box_empty_transparent.png'
        #if right press
        # load in images of either coin box or empty box conditionally
        elif cue_resp.keys==right_button: #same as above
            #look back one since exp_correct has been incremented
            if sequence[exp_correct -1 ] == 1 and good_side == "right":
                right_image = 'stimuli/box_coin_transparent.png'
            else:
                right_image = 'stimuli/box_empty_transparent.png'
        else:
            Choice="NA"
      End Routine:
        if cue_resp.keys==left_button:
            thisExp.addData('outcome_image', left_image)
        elif cue_resp.keys==right_button:
            thisExp.addData('outcome_image', right_image)
        else:
            thisExp.addData('outcome_image', "no selection made")
    ImageComponent outcome_left_box
      image [set every repeat] = $left_image
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent outcome_right_box
      image [set every repeat] = $right_image
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine fixation
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    TextComponent fixation_cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITI
      text = +
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  Routine get_ready
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    TextComponent get_ready_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Get Ready!

        Press the space bar to continue.
    KeyboardComponent advance_press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent init_runs
      Code Type = Auto->JS
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      Begin Routine:
        num_gold_coins = 0
        leftover_t = 0 #leftover time for fast RTs to run out at end of trial

        #pick coin side for the start of the run
        coin = random.randint(1, 2)
        if coin == 1:
            good_side = "left"
        else:
            good_side = "right"

        good_side = "right"
        #start at a new magic num for runs 2, 3
        if runs.thisN != 0 and num_rewarded != 0:
            num_switch = num_switch + 1
            print(num_switch)


        num_rewarded = 0 #start fresh for each run
  Routine run_feedback
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    TextComponent coins_won_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $'Congratulations, you collected ' + str(num_gold_coins) + ' gold coins!!'
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  Routine scanner_trigger
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    TextComponent scanner_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        waiting for scanner

        Press "5" to emulate scanner trigger.
    KeyboardComponent trigger_value
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent trigger_code
      Code Type = Auto->JS
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      Begin Routine:
        waitForScannerClock = core.Clock()
        fmriClock = core.Clock()
  Routine leftover_time_break
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    TextComponent fixation_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = leftover_t
      text [set every repeat] = $'Take a short break for  ' + str(leftover_t) + ' seconds!!'
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  Routine cue_response
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    CodeComponent cue_resp_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        #initialize selection indicator
        selection_indicator = visual.Rect(
            win=win, name='polygon',
            width=(0.5, 0.5)[0], height=(0.5, 0.5)[1],
            ori=0.0, draggable=False, anchor='center',
            lineWidth=4.0,
            colorSpace='rgb', lineColor='white', fillColor=None,
            depth=-4.0, interpolate=True,
            autoDraw = False)


        #initialize too slow message
        too_slow_text = visual.TextStim(win=win, name='too_slow_text',
        text='too slow',
        font='Arial',
        pos=(0, .1), draggable=False, height=0.1, wrapWidth=None, ori=0.0,
        color='white', colorSpace='rgb', opacity=1.0,
        languageStyle='LTR',
        depth=-6.0,
        autoDraw = False)

        #if response was made
        #get cue_resp.rt and figure out how much time is left over
        if(cue_resp.rt):
            if cue_resp.keys == left_button:
                position = (-0.3, -0.15)
                selection_indicator.setPos(position)
                selection_indicator.setAutoDraw(True)
            elif cue_resp.keys == right_button:
                position = (0.3, -0.15)
                selection_indicator.setPos(position)
                selection_indicator.setAutoDraw(True)
        #show too slow message
        else:
            too_slow_text.setAutoDraw(True)
      End Routine:
        #turn off selection indicator
        selection_indicator.setAutoDraw(False)

        #turn off too slow
        too_slow_text.setAutoDraw(False)
    ImageComponent left_box_response
      image = stimuli/box_transparent.png
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ISI
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    ImageComponent right_box_response
      image = stimuli/box_transparent.png
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ISI
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  Routine end_exp
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  Routine prac_right
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    ImageComponent left_box_rp
      image = stimuli/box_transparent.png
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent right_box_rp
      image = stimuli/box_transparent.png
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent cue_resp_rp
      allowedKeys = right_button
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent prac_right_text
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text = Practice selecting the right box by pushing the "2" key on your keyboard. 
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  Routine prac_dir
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    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"GAME OF COINS \n\nIn this game, your job is collect as many gold coins as possible. \n\nPress the \"" + left_button + "\" key with your " + left_finger + " finger to open the box."
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    KeyboardComponent advance_press_pd
      allowedKeys = pointer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent hand_code
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo["handedness"] == "right":
            left_button = "j"
            left_finger = "pointer"
            left_press = left_button
            right_button = "k"
            right_finger = "middle"
            left_press = left_press
            right_press = right_button
            pointer = left_press

        else:
            left_button = "d"
            left_finger = "middle"
            right_button = "f"
            right_finger = "pointer"
            left_press = left_button
            right_press = right_button
            pointer = right_press
  Routine first_box
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    ImageComponent show_stimuli
      image = stimuli/box_transparent.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent stimuli_text
      letterHeight = 0.05
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      text = $"The coins are hidden in magical boxes, like this one: \n\n\n\n\n\n\n\n\n\n Can you open the box to see if it has a coin? Press the \"" + left_button + "\" key with your " + left_finger + " finger to open the box."
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    KeyboardComponent key_resp
      allowedKeys = left_press
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine first_coin
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    ImageComponent first_coin_img
      image = stimuli/box_coin_transparent.png
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent magic_coin_text
      letterHeight = 0.05
      pos = (0, .22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = This box is magical! It contains a coin.
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  Routine prac_both
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    ImageComponent prac_left_2
      image = stimuli/box_transparent.png
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent prac_right_2
      image = stimuli/box_transparent.png
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent find_box_press
      allowedKeys = left_press, right_press
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
  Routine first_coin_fb
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    TextComponent magic_box_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = This box is magical! It contains a coin.
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  Routine prac_both_instructions
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    TextComponent prac_both_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $"For each choice, there will be two boxes, but only one is magical. Try finding the magical box. \n\n\n Press the \"" + left_button +"\" key with your " + left_finger + " finger to open the left box and press  the \"" + right_button +"\" key with your " + right_finger + " finger to open the right box. \n\n\n Press with your pointer finger when you are ready to start."
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    ImageComponent prac_left_3
      disabled = True
      image = stimuli/box_transparent.png
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
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    ImageComponent prac_right_3
      disabled = True
      image = stimuli/box_transparent.png
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
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    CodeComponent button_both
      Code Type = Auto->JS
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      Begin Routine:
        #set buttons:
        left_press = left_button
        right_press = right_button
    KeyboardComponent key_resp_2
      allowedKeys = pointer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine switch_out
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    ImageComponent left_box_switch_out
      image [set every repeat] = $left_image
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent right_box_switch_out
      image [set every repeat] = $right_image
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine switch_select
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    ImageComponent left_switch_selec
      image = stimuli/box_transparent.png
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent right_switch_selec
      image = stimuli/box_transparent.png
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    CodeComponent manage_prac_left
      Code Type = Auto->JS
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      Begin Routine:
        #initialize selection indicator
        if(cue_resp_switch.keys == left_press):
            position = (-0.3, -0.15)
        else:
           position = (0.3, -0.15)


        pr_selection_indicator = visual.Rect(
            win=win, name='polygon',
            width=(0.5, 0.5)[0], height=(0.5, 0.5)[1],
            ori=0.0, draggable=False, anchor='center',
            lineWidth=4.0,
            pos = position,
            colorSpace='rgb', lineColor='white', fillColor=None,
            depth=-4.0, interpolate=True,
            autoDraw = True)

        #if no press is made
        right_image = 'stimuli/box_transparent.png'
        left_image = 'stimuli/box_transparent.png'

        #left box is magical
        if cue_resp_switch.keys==left_press:
            if(switch_side_loop.thisN < 5):
                left_image = 'stimuli/box_empty_transparent.png'
            else:
                left_image = 'stimuli/box_coin_transparent.png'
        else:
            if(switch_side_loop.thisN < 5):
                right_image = 'stimuli/box_coin_transparent.png'
            else:
                right_image = 'stimuli/box_empty_transparent.png'
      End Routine:
        #turn off selection indicator
        pr_selection_indicator.setAutoDraw(False)
    CodeComponent prac_box_code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #if no press is made
        right_image = 'stimuli/box_transparent.png'
        left_image = 'stimuli/box_transparent.png'

        #left box is magical
        if cue_resp_switch.keys==left_press:
            if(switch_side_loop.thisN < 5):
                left_image = 'stimuli/box_empty_transparent.png'
            else:
                left_image = 'stimuli/box_coin_transparent.png'
        else:
            if(switch_side_loop.thisN < 5):
                right_image = 'stimuli/box_coin_transparent.png'
            else:
                right_image = 'stimuli/box_empty_transparent.png'
  Routine switch_cue
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    ImageComponent left_box_switch
      image = stimuli/box_transparent.png
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent right_box_switch
      image = stimuli/box_transparent.png
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent cue_resp_switch
      allowedKeys = left_press, right_press
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine switch_instruc
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    TextComponent switch_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Sometimes, the magical box switches sides

        Try finding the magical box again!
  Routine no_coin_instruc
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    TextComponent summary_text
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        Sometimes, even the magical box does not have a coin. This makes it harder to find.


        Can you still find the magic box?

        Press with your pointer finger to continue.
    CodeComponent define_switches_code
      Code Type = Auto->JS
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      Begin Experiment:
        # short switches so they get through
        # at least on switch in the prac
        num_switch_list = [7, 8, 7]
    CodeComponent probability_sequence_code
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import csv
      Begin Experiment:
        sequence = []
        exp_correct = 0 #number of correct choices made in the experiment


        #TODO: pull this from experiment variables.
        number_of_trials = 150

        while len(sequence) < number_of_trials:
            #generate a probabilty list at 75p by alternating
            #ten trials at 80p and ten trials 70p.
            sequence_80 = [0] * 2 + [1] * 8
            random.shuffle(sequence_80)
            sequence_70 = [0] * 3 + [1] * 7
            random.shuffle(sequence_70)
            sequence = sequence + sequence_80 + sequence_70
            #TODO: output this sequence to a .csv that gets saved.


        with open('test.csv', 'w', newline='') as myfile:
             wr = csv.writer(myfile)
             wr.writerow(sequence)
      Begin Routine:
        num_gold_coins = 0
    CodeComponent iti_code
      Code Type = Auto->JS
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      Before Experiment:
        import pandas as pd
      Begin Experiment:
        #read in ISI and ITI jitters
        jitters = pd.read_csv('rl_reversal_jitters.csv')
    KeyboardComponent pointer_press
      allowedKeys = pointer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_both_selec
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    CodeComponent prac_left_feedback
      Code Type = Auto->JS
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      Begin Experiment:
        found_box = False
      Begin Routine:

        #init images
        right_image = 'stimuli/box_transparent.png'
        left_image = 'stimuli/box_transparent.png'
        #what happens based on press
        if(find_box_press.keys == left_button):
            position = (-0.3, -0.15)
            left_image = 'stimuli/box_coin_transparent.png'
            found_box = True
        else:
           position = (0.3, -0.15)
           right_image = 'stimuli/box_empty_transparent.png'

        #draw selection indicator
        pr_selection_indicator = visual.Rect(
            win=win, name='polygon',
            width=(0.5, 0.5)[0], height=(0.5, 0.5)[1],
            ori=0.0, draggable=False, anchor='center',
            lineWidth=4.0,
            pos = position,
            colorSpace='rgb', lineColor='white', fillColor=None,
            depth=-4.0, interpolate=True,
            autoDraw = True)
      End Routine:
        #turn off selection indicator
        pr_selection_indicator.setAutoDraw(False)
    ImageComponent left_box_lr
      image = stimuli/box_transparent.png
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent right_box_lr
      image = stimuli/box_transparent.png
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    CodeComponent prac_box_code_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #if no press is made
        right_image = 'stimuli/box_transparent.png'
        left_image = 'stimuli/box_transparent.png'

        #left box is magical
        if find_box_press.keys==left_button:
            left_image = 'stimuli/box_coin_transparent.png'
        else:
            right_image = 'stimuli/box_empty_transparent.png'
  Routine prac_both_out
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    ImageComponent prac_left_box
      image [set every repeat] = $left_image
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent prac_right_box
      image [set every repeat] = $right_image
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine saw_reward
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    CodeComponent restart_proceed_code
      Code Type = Auto->JS
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      Begin Routine:
        if(found_box):
            both_loop_text = "Sometimes, the magical box switches sides\n\nTry finding the magical box again! Press with your pointer finger to proceed."
            restart_both.finished=True #or trials.finished=1
        else:
            both_loop_text = "It can be helpful to explore both sides to find the magic box. See if you can find it. Press with your pointer finger to proceed."
    TextComponent restart_proceed_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $both_loop_text
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    KeyboardComponent key_resp_3
      allowedKeys = pointer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_2
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  Routine fix_both
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    TextComponent fix_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fix_dur
      text = +
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    CodeComponent fix_dur_code
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Routine:
        fix_dur = random.choice([.5, 1, 3])
  Routine understanding_check
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    CodeComponent restartPrac
      Code Type = Auto->JS
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      End Routine:
        if restart_key.keys=='c':
            pracLoop.finished = True
    KeyboardComponent restart_key
      allowedKeys = 'r','c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine prac_dir
  Routine first_box
  Routine first_coin
  Routine prac_both_instructions
  LoopInitiator restart_both loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator find_magic_box_loop loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine prac_both
      Routine prac_both_selec
      Routine prac_both_out
      Routine fix_both
    LoopTerminator find_magic_box_loop
    Routine saw_reward
  LoopTerminator restart_both
  LoopInitiator switch_side_loop loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine switch_cue
    Routine switch_select
    Routine switch_out
    Routine fix_both
  LoopTerminator switch_side_loop
  LoopInitiator pracLoop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine no_coin_instruc
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 20
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      Routine cue
      Routine cue_response
      Routine outcome
      Routine fixation
    LoopTerminator trials
    Routine run_feedback
    Routine understanding_check
  LoopTerminator pracLoop
